PsychoPy2experiment version="3.0.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  expName = ratings
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Routines
  Routine intro
    TextComponent intro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        """Welcome!

        Please look at the following images
        and rate them according to
        how you feel about them.

        [Click anywhere to continue...]
        """
    MouseComponent intro_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet


        # Setup the LSL stream
        info = StreamInfo(name='PsychoPy', type='Markers', channel_count=1,
                          channel_format='string', source_id='PsychopyMarkersID321654')

        # Initialize the LSL stream.
        outlet = StreamOutlet(info)
      Begin Routine:
        outlet.push_sample(["intro"])
  Routine pre
    TextComponent pre_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Get ready...
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  Routine fix
    PolygonComponent fixation_cross
      fillColor = $[1,1,1]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine blank
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine image
    ImageComponent stim_image
      image [set every repeat] = $f"./img/{img_name}"
      pos = (0, .2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent sam_image
      image = f"./img/SAM-V-9.png"
      size = (0.8, 0.2)
      startVal [time (s)] = 0.0
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    SliderComponent valence_slider
      forceEndRoutine = True
      granularity = 0
      pos = (0, -0.4)
      size = (0.9, 0.1)
      startVal [time (s)] = 0.0
      styles = ('slider', 'rating', 'triangleMarker')
      ticks = (-4, -3, -2, -1, 0, 1, 2, 3, 4)
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    CodeComponent stim_code
      Code Type = Py
      Begin Experiment:
        outlet.push_sample([img_name])
  Routine end
    TextComponent end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        """
        Thanks for your participation!
        """
Flow
  Routine intro
  Routine pre
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ./lists/img.csv
    loopType = random
    nReps = 5
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    Routine fix
    Routine blank
    Routine image
  LoopTerminator trials
  Routine end
